---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/RUG/MyPhDProject/OpenSesame Scripts pilot studies"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run exposure_loop_m_1 always
	run count_tone_1 always
	run exposure_loop_m_2_1 always
	run count_tone_2 always
	run bridge always
	run start_test always
	run test_loop always

define sketchpad bridge
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Good job! You just finished practicing the first part! <br /><br />But please note that in the real experiment, you will go through 5 rounds of 2-minute speech stream in this part. That means it will last much longer than the practice.<br /><br /><br />Ready to practice the second half part? Please press ANYKEY!" x=0 y=0 z_index=0

define inline_script count_sum
	set description "Executes Python code"
	___run__
	#These are for summarizing how accuracy of counting task. Put the script before testing phase starts
	# put the following codes in "Run"
	
	count1_str = self.get("count_tone_1")
	count2_str = self.get("count_tone_2")
	count3_str = self.get("count_tone_3")
	count4_str = self.get("count_tone_4")
	count5_str = self.get("count_tone_5")
	#the var "count_tone_n" need to be specified before this script
	
	
	sum_count = ( (count1_str) / 0.04 + (count2_str) / 0.01 + (count3_str) / 0.02 + (count4_str) * 0 + (count5_str) / 0.04 ) / 5
	
	exp.set ("total_count", sum_count)
	
	#at the end of experiment, add a feedback icon, with the text: "In the beeps detecting task, you sucessfully detected [total_count]% of all beeps.
	#In the word familiarity test, your accuracy was [acc]%.
	#Press ANYKEY to continue"
	# * var "acc" is a self-contained variable in the program
	__end__
	set _prepare ""

define form_text_input count_tone_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var practice_count_tone_1
	set form_title "How many beeps did you count?"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define form_text_input count_tone_2
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var practice_count_tone_2
	set form_title "How many beeps did you count?"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is the end of the experiment. Thanks for your participation!<br /><br /><br />Press ANYKEY to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instruction - the real experiment<br /><br /><br />Next you will start the real experiment which lasts for around 20 minutes in total. <br /><br />Similar to what you did in the practice round, you perform a beeps detecting task in the first half part and a test on word familiarity in the second half. Please stay focused and make accurate responses as possible as you can!<br /><br />At the end of each day, you will be shown the results of your performance. Your average accuracy across the 4 days determines how much bonus you will get. Good luck :)<br /><br />Press ANYKEY to start the real experiment<br />" x=0 y=0 z_index=0

define sequence exp_block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run exp_exposure_loop_m_1 "[subject_nr] % 2 = 0"
	run exp_exposure_loop_f_1 "[subject_nr] % 2 = 1"
	run exp_count_tone_1 always
	run exp_exposure_loop_m_2 "[subject_nr] % 2 = 0"
	run exp_exposure_loop_f_2 "[subject_nr] % 2 = 1"
	run exp_count_tone_2 always
	run exp_exposure_loop_m_3 "[subject_nr] % 2 = 0"
	run exp_exposure_loop_f_3 "[subject_nr] % 2 = 1"
	run exp_count_tone_3 always
	run exp_exposure_loop_m_4 "[subject_nr] % 2 = 0"
	run exp_exposure_loop_f_4 "[subject_nr] % 2 = 1"
	run exp_count_tone_4 always
	run exp_exposure_loop_m_5 "[subject_nr] % 2 = 0"
	run exp_exposure_loop_f_5 "[subject_nr] % 2 = 1"
	run exp_count_tone_5 always
	run count_sum always
	run exp_start_test always
	run exp_test_loop always
	run feedback always

define sketchpad exp_choice_1_sketchpad
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 1" x=0 y=-96 z_index=0
	draw image center=1 file="speaker.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sampler exp_choice_1_sound
	set volume 1
	set stop_after 0
	set sample "[c1][gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad exp_choice_2_sketchpad
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 2" x=0 y=-96 z_index=0
	draw image center=1 file="speaker.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sampler exp_choice_2_sound
	set volume 1
	set stop_after 0
	set sample "[c2][gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define form_text_input exp_count_tone_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var count_tone_1
	set form_title "How many beeps did you count? (Round 1 / 5)"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define form_text_input exp_count_tone_2
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var count_tone_2
	set form_title "How many beeps did you count? (Round 2 / 5)"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define form_text_input exp_count_tone_3
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var count_tone_3
	set form_title "How many beeps did you count? (Round 3 / 5)"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define form_text_input exp_count_tone_4
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var count_tone_4
	set form_title "How many beeps did you count? (Round 4 / 5)"
	__form_question__
	Please type your answer using the number keys.
	Strike "Enter" to submit.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes var="[form_var]"


define form_text_input exp_count_tone_5
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
define sampler exp_exposure
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_1
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_1
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_2
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_3
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_3_1
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_3_2
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_3_3
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exp_exposure_2_3_4
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad exp_exposure_fixation
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_1
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_1
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_2
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_3
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_3_1
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_3_2
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_3_3
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exp_exposure_fixation_2_3_4
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define loop exp_exposure_loop_f_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 124
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable du
	setcycle 0 tone_gender 2_f
	setcycle 1 syllable ge
	setcycle 1 tone_gender 3_f
	setcycle 2 syllable ge
	setcycle 2 tone_gender 1_f
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_f
	setcycle 4 syllable kou
	setcycle 4 tone_gender 3_f
	setcycle 5 syllable bi
	setcycle 5 tone_gender 4_f
	setcycle 6 syllable bi
	setcycle 6 tone_gender 4_f
	setcycle 7 syllable ge
	setcycle 7 tone_gender 1_f
	setcycle 8 syllable kou
	setcycle 8 tone_gender 3_f
	setcycle 9 syllable kou
	setcycle 9 tone_gender 3_f
	setcycle 10 syllable bi
	setcycle 10 tone_gender 4_f
	setcycle 11 syllable ge
	setcycle 11 tone_gender 1_f
	setcycle 12 syllable kou
	setcycle 12 tone_gender 1_f
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_f
	setcycle 14 syllable bi
	setcycle 14 tone_gender 4_f
	setcycle 15 syllable kou
	setcycle 15 tone_gender 3_f
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_f
	setcycle 17 syllable G
	setcycle 17 tone_gender "_"
	setcycle 18 syllable ge
	setcycle 18 tone_gender 1_f
	setcycle 19 syllable A
	setcycle 19 tone_gender "_"
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_f
	setcycle 21 syllable du
	setcycle 21 tone_gender 2_f
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_f
	setcycle 23 syllable ge
	setcycle 23 tone_gender 1_f
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_f
	setcycle 25 syllable kou
	setcycle 25 tone_gender 3_f
	setcycle 26 syllable ge
	setcycle 26 tone_gender 1_f
	setcycle 27 syllable kou
	setcycle 27 tone_gender 3_f
	setcycle 28 syllable kou
	setcycle 28 tone_gender 3_f
	setcycle 29 syllable kou
	setcycle 29 tone_gender 3_f
	setcycle 30 syllable ge
	setcycle 30 tone_gender 1_f
	setcycle 31 syllable du
	setcycle 31 tone_gender 2_f
	setcycle 32 syllable kou
	setcycle 32 tone_gender 3_f
	setcycle 33 syllable kou
	setcycle 33 tone_gender 1_f
	setcycle 34 syllable ge
	setcycle 34 tone_gender 1_f
	setcycle 35 syllable kou
	setcycle 35 tone_gender 3_f
	setcycle 36 syllable du
	setcycle 36 tone_gender 2_f
	setcycle 37 syllable du
	setcycle 37 tone_gender 2_f
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_f
	setcycle 39 syllable ge
	setcycle 39 tone_gender 1_f
	setcycle 40 syllable ge
	setcycle 40 tone_gender 1_f
	setcycle 41 syllable kou
	setcycle 41 tone_gender 3_f
	setcycle 42 syllable ge
	setcycle 42 tone_gender 2_f
	setcycle 43 syllable kou
	setcycle 43 tone_gender 3_f
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_f
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_f
	setcycle 46 syllable bi
	setcycle 46 tone_gender 3_f
	setcycle 47 syllable du
	setcycle 47 tone_gender 2_f
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_f
	setcycle 49 syllable bi
	setcycle 49 tone_gender 4_f
	setcycle 50 syllable du
	setcycle 50 tone_gender 2_f
	setcycle 51 syllable kou
	setcycle 51 tone_gender 3_f
	setcycle 52 syllable bi
	setcycle 52 tone_gender 4_f
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_f
	setcycle 54 syllable bi
	setcycle 54 tone_gender 4_f
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_f
	setcycle 56 syllable bi
	setcycle 56 tone_gender 4_f
	setcycle 57 syllable du
	setcycle 57 tone_gender 1_f
	setcycle 58 syllable du
	setcycle 58 tone_gender 1_f
	setcycle 59 syllable E
	setcycle 59 tone_gender "_"
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_f
	setcycle 61 syllable du
	setcycle 61 tone_gender 2_f
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_f
	setcycle 63 syllable bi
	setcycle 63 tone_gender 4_f
	setcycle 64 syllable du
	setcycle 64 tone_gender 2_f
	setcycle 65 syllable ge
	setcycle 65 tone_gender 1_f
	setcycle 66 syllable ge
	setcycle 66 tone_gender 3_f
	setcycle 67 syllable kou
	setcycle 67 tone_gender 3_f
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_f
	setcycle 69 syllable bi
	setcycle 69 tone_gender 4_f
	setcycle 70 syllable kou
	setcycle 70 tone_gender 3_f
	setcycle 71 syllable kou
	setcycle 71 tone_gender 3_f
	setcycle 72 syllable ge
	setcycle 72 tone_gender 1_f
	setcycle 73 syllable ge
	setcycle 73 tone_gender 1_f
	setcycle 74 syllable kou
	setcycle 74 tone_gender 3_f
	setcycle 75 syllable bi
	setcycle 75 tone_gender 4_f
	setcycle 76 syllable ge
	setcycle 76 tone_gender 1_f
	setcycle 77 syllable ge
	setcycle 77 tone_gender 2_f
	setcycle 78 syllable kou
	setcycle 78 tone_gender 3_f
	setcycle 79 syllable kou
	setcycle 79 tone_gender 3_f
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_f
	setcycle 81 syllable bi
	setcycle 81 tone_gender 4_f
	setcycle 82 syllable du
	setcycle 82 tone_gender 2_f
	setcycle 83 syllable ge
	setcycle 83 tone_gender 1_f
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_f
	setcycle 85 syllable bi
	setcycle 85 tone_gender 1_f
	setcycle 86 syllable bi
	setcycle 86 tone_gender 4_f
	setcycle 87 syllable ge
	setcycle 87 tone_gender 2_f
	setcycle 88 syllable du
	setcycle 88 tone_gender 2_f
	setcycle 89 syllable bi
	setcycle 89 tone_gender 4_f
	setcycle 90 syllable ge
	setcycle 90 tone_gender 1_f
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_f
	setcycle 92 syllable du
	setcycle 92 tone_gender 2_f
	setcycle 93 syllable du
	setcycle 93 tone_gender 4_f
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_f
	setcycle 95 syllable ge
	setcycle 95 tone_gender 1_f
	setcycle 96 syllable du
	setcycle 96 tone_gender 2_f
	setcycle 97 syllable ge
	setcycle 97 tone_gender 1_f
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_f
	setcycle 99 syllable du
	setcycle 99 tone_gender 2_f
	setcycle 100 syllable bi
	setcycle 100 tone_gender 4_f
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_f
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_f
	setcycle 103 syllable kou
	setcycle 103 tone_gender 3_f
	setcycle 104 syllable bi
	setcycle 104 tone_gender 2_f
	setcycle 105 syllable ge
	setcycle 105 tone_gender 1_f
	setcycle 106 syllable du
	setcycle 106 tone_gender 2_f
	setcycle 107 syllable bi
	setcycle 107 tone_gender 4_f
	setcycle 108 syllable bi
	setcycle 108 tone_gender 4_f
	setcycle 109 syllable bi
	setcycle 109 tone_gender 4_f
	setcycle 110 syllable bi
	setcycle 110 tone_gender 4_f
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_f
	setcycle 112 syllable du
	setcycle 112 tone_gender 2_f
	setcycle 113 syllable kou
	setcycle 113 tone_gender 3_f
	setcycle 114 syllable ge
	setcycle 114 tone_gender 1_f
	setcycle 115 syllable bi
	setcycle 115 tone_gender 4_f
	setcycle 116 syllable kou
	setcycle 116 tone_gender 3_f
	setcycle 117 syllable du
	setcycle 117 tone_gender 2_f
	setcycle 118 syllable D
	setcycle 118 tone_gender "_"
	setcycle 119 syllable bi
	setcycle 119 tone_gender 4_f
	setcycle 120 syllable kou
	setcycle 120 tone_gender 3_f
	setcycle 121 syllable du
	setcycle 121 tone_gender 2_f
	setcycle 122 syllable bi
	setcycle 122 tone_gender 4_f
	setcycle 123 syllable kou
	setcycle 123 tone_gender 3_f
	run exp_exposure_sequence_2_3

define loop exp_exposure_loop_f_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 121
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable kou
	setcycle 0 tone_gender 3_f
	setcycle 1 syllable kou
	setcycle 1 tone_gender 3_f
	setcycle 2 syllable kou
	setcycle 2 tone_gender 3_f
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_f
	setcycle 4 syllable du
	setcycle 4 tone_gender 2_f
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_f
	setcycle 6 syllable du
	setcycle 6 tone_gender 2_f
	setcycle 7 syllable du
	setcycle 7 tone_gender 1_f
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_f
	setcycle 9 syllable ge
	setcycle 9 tone_gender 2_f
	setcycle 10 syllable kou
	setcycle 10 tone_gender 3_f
	setcycle 11 syllable kou
	setcycle 11 tone_gender 1_f
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_f
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_f
	setcycle 14 syllable kou
	setcycle 14 tone_gender 3_f
	setcycle 15 syllable ge
	setcycle 15 tone_gender 1_f
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_f
	setcycle 17 syllable kou
	setcycle 17 tone_gender 3_f
	setcycle 18 syllable kou
	setcycle 18 tone_gender 3_f
	setcycle 19 syllable ge
	setcycle 19 tone_gender 1_f
	setcycle 20 syllable bi
	setcycle 20 tone_gender 1_f
	setcycle 21 syllable ge
	setcycle 21 tone_gender 1_f
	setcycle 22 syllable kou
	setcycle 22 tone_gender 4_f
	setcycle 23 syllable du
	setcycle 23 tone_gender 2_f
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_f
	setcycle 25 syllable du
	setcycle 25 tone_gender 2_f
	setcycle 26 syllable du
	setcycle 26 tone_gender 2_f
	setcycle 27 syllable du
	setcycle 27 tone_gender 2_f
	setcycle 28 syllable ge
	setcycle 28 tone_gender 1_f
	setcycle 29 syllable bi
	setcycle 29 tone_gender 4_f
	setcycle 30 syllable du
	setcycle 30 tone_gender 2_f
	setcycle 31 syllable ge
	setcycle 31 tone_gender 1_f
	setcycle 32 syllable ge
	setcycle 32 tone_gender 1_f
	setcycle 33 syllable kou
	setcycle 33 tone_gender 3_f
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_f
	setcycle 35 syllable ge
	setcycle 35 tone_gender 1_f
	setcycle 36 syllable bi
	setcycle 36 tone_gender 4_f
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_f
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_f
	setcycle 39 syllable bi
	setcycle 39 tone_gender 4_f
	setcycle 40 syllable ge
	setcycle 40 tone_gender 3_f
	setcycle 41 syllable du
	setcycle 41 tone_gender 2_f
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_f
	setcycle 43 syllable kou
	setcycle 43 tone_gender 3_f
	setcycle 44 syllable du
	setcycle 44 tone_gender 2_f
	setcycle 45 syllable bi
	setcycle 45 tone_gender 4_f
	setcycle 46 syllable bi
	setcycle 46 tone_gender 4_f
	setcycle 47 syllable bi
	setcycle 47 tone_gender 4_f
	setcycle 48 syllable A
	setcycle 48 tone_gender "_"
	setcycle 49 syllable bi
	setcycle 49 tone_gender 4_f
	setcycle 50 syllable du
	setcycle 50 tone_gender 2_f
	setcycle 51 syllable du
	setcycle 51 tone_gender 2_f
	setcycle 52 syllable ge
	setcycle 52 tone_gender 1_f
	setcycle 53 syllable du
	setcycle 53 tone_gender 2_f
	setcycle 54 syllable bi
	setcycle 54 tone_gender 4_f
	setcycle 55 syllable du
	setcycle 55 tone_gender 4_f
	setcycle 56 syllable du
	setcycle 56 tone_gender 2_f
	setcycle 57 syllable du
	setcycle 57 tone_gender 2_f
	setcycle 58 syllable ge
	setcycle 58 tone_gender 1_f
	setcycle 59 syllable bi
	setcycle 59 tone_gender 4_f
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_f
	setcycle 61 syllable du
	setcycle 61 tone_gender 2_f
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_f
	setcycle 63 syllable du
	setcycle 63 tone_gender 2_f
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_f
	setcycle 65 syllable du
	setcycle 65 tone_gender 2_f
	setcycle 66 syllable bi
	setcycle 66 tone_gender 4_f
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_f
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_f
	setcycle 69 syllable ge
	setcycle 69 tone_gender 1_f
	setcycle 70 syllable bi
	setcycle 70 tone_gender 4_f
	setcycle 71 syllable kou
	setcycle 71 tone_gender 3_f
	setcycle 72 syllable kou
	setcycle 72 tone_gender 3_f
	setcycle 73 syllable bi
	setcycle 73 tone_gender 4_f
	setcycle 74 syllable bi
	setcycle 74 tone_gender 4_f
	setcycle 75 syllable kou
	setcycle 75 tone_gender 3_f
	setcycle 76 syllable kou
	setcycle 76 tone_gender 3_f
	setcycle 77 syllable kou
	setcycle 77 tone_gender 3_f
	setcycle 78 syllable bi
	setcycle 78 tone_gender 4_f
	setcycle 79 syllable kou
	setcycle 79 tone_gender 1_f
	setcycle 80 syllable ge
	setcycle 80 tone_gender 1_f
	setcycle 81 syllable ge
	setcycle 81 tone_gender 1_f
	setcycle 82 syllable ge
	setcycle 82 tone_gender 1_f
	setcycle 83 syllable bi
	setcycle 83 tone_gender 4_f
	setcycle 84 syllable ge
	setcycle 84 tone_gender 1_f
	setcycle 85 syllable bi
	setcycle 85 tone_gender 4_f
	setcycle 86 syllable ge
	setcycle 86 tone_gender 1_f
	setcycle 87 syllable du
	setcycle 87 tone_gender 2_f
	setcycle 88 syllable du
	setcycle 88 tone_gender 2_f
	setcycle 89 syllable bi
	setcycle 89 tone_gender 4_f
	setcycle 90 syllable bi
	setcycle 90 tone_gender 4_f
	setcycle 91 syllable kou
	setcycle 91 tone_gender 3_f
	setcycle 92 syllable kou
	setcycle 92 tone_gender 3_f
	setcycle 93 syllable du
	setcycle 93 tone_gender 2_f
	setcycle 94 syllable ge
	setcycle 94 tone_gender 1_f
	setcycle 95 syllable bi
	setcycle 95 tone_gender 4_f
	setcycle 96 syllable kou
	setcycle 96 tone_gender 3_f
	setcycle 97 syllable kou
	setcycle 97 tone_gender 4_f
	setcycle 98 syllable kou
	setcycle 98 tone_gender 3_f
	setcycle 99 syllable ge
	setcycle 99 tone_gender 2_f
	setcycle 100 syllable kou
	setcycle 100 tone_gender 3_f
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_f
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_f
	setcycle 103 syllable bi
	setcycle 103 tone_gender 3_f
	setcycle 104 syllable ge
	setcycle 104 tone_gender 1_f
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_f
	setcycle 106 syllable kou
	setcycle 106 tone_gender 3_f
	setcycle 107 syllable ge
	setcycle 107 tone_gender 1_f
	setcycle 108 syllable ge
	setcycle 108 tone_gender 1_f
	setcycle 109 syllable du
	setcycle 109 tone_gender 2_f
	setcycle 110 syllable bi
	setcycle 110 tone_gender 4_f
	setcycle 111 syllable du
	setcycle 111 tone_gender 1_f
	setcycle 112 syllable ge
	setcycle 112 tone_gender 1_f
	setcycle 113 syllable kou
	setcycle 113 tone_gender 3_f
	setcycle 114 syllable bi
	setcycle 114 tone_gender 4_f
	setcycle 115 syllable ge
	setcycle 115 tone_gender 1_f
	setcycle 116 syllable ge
	setcycle 116 tone_gender 1_f
	setcycle 117 syllable kou
	setcycle 117 tone_gender 3_f
	setcycle 118 syllable ge
	setcycle 118 tone_gender 1_f
	setcycle 119 syllable du
	setcycle 119 tone_gender 2_f
	setcycle 120 syllable bi
	setcycle 120 tone_gender 4_f
	run exp_exposure_sequence_2_3_1

define loop exp_exposure_loop_f_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 122
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable kou
	setcycle 0 tone_gender 3_f
	setcycle 1 syllable bi
	setcycle 1 tone_gender 4_f
	setcycle 2 syllable du
	setcycle 2 tone_gender 2_f
	setcycle 3 syllable ge
	setcycle 3 tone_gender 1_f
	setcycle 4 syllable ge
	setcycle 4 tone_gender 1_f
	setcycle 5 syllable ge
	setcycle 5 tone_gender 4_f
	setcycle 6 syllable ge
	setcycle 6 tone_gender 1_f
	setcycle 7 syllable du
	setcycle 7 tone_gender 2_f
	setcycle 8 syllable du
	setcycle 8 tone_gender 2_f
	setcycle 9 syllable ge
	setcycle 9 tone_gender 1_f
	setcycle 10 syllable du
	setcycle 10 tone_gender 2_f
	setcycle 11 syllable du
	setcycle 11 tone_gender 1_f
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_f
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_f
	setcycle 14 syllable bi
	setcycle 14 tone_gender 4_f
	setcycle 15 syllable ge
	setcycle 15 tone_gender 1_f
	setcycle 16 syllable du
	setcycle 16 tone_gender 2_f
	setcycle 17 syllable ge
	setcycle 17 tone_gender 1_f
	setcycle 18 syllable du
	setcycle 18 tone_gender 2_f
	setcycle 19 syllable bi
	setcycle 19 tone_gender 4_f
	setcycle 20 syllable ge
	setcycle 20 tone_gender 1_f
	setcycle 21 syllable bi
	setcycle 21 tone_gender 4_f
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_f
	setcycle 23 syllable kou
	setcycle 23 tone_gender 3_f
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_f
	setcycle 25 syllable ge
	setcycle 25 tone_gender 1_f
	setcycle 26 syllable kou
	setcycle 26 tone_gender 3_f
	setcycle 27 syllable ge
	setcycle 27 tone_gender 1_f
	setcycle 28 syllable bi
	setcycle 28 tone_gender 4_f
	setcycle 29 syllable bi
	setcycle 29 tone_gender 4_f
	setcycle 30 syllable du
	setcycle 30 tone_gender 3_f
	setcycle 31 syllable du
	setcycle 31 tone_gender 4_f
	setcycle 32 syllable ge
	setcycle 32 tone_gender 1_f
	setcycle 33 syllable ge
	setcycle 33 tone_gender 1_f
	setcycle 34 syllable E
	setcycle 34 tone_gender "_"
	setcycle 35 syllable bi
	setcycle 35 tone_gender 4_f
	setcycle 36 syllable ge
	setcycle 36 tone_gender 1_f
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_f
	setcycle 38 syllable ge
	setcycle 38 tone_gender 1_f
	setcycle 39 syllable ge
	setcycle 39 tone_gender 1_f
	setcycle 40 syllable du
	setcycle 40 tone_gender 2_f
	setcycle 41 syllable kou
	setcycle 41 tone_gender 3_f
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_f
	setcycle 43 syllable ge
	setcycle 43 tone_gender 1_f
	setcycle 44 syllable ge
	setcycle 44 tone_gender 1_f
	setcycle 45 syllable bi
	setcycle 45 tone_gender 4_f
	setcycle 46 syllable bi
	setcycle 46 tone_gender 4_f
	setcycle 47 syllable bi
	setcycle 47 tone_gender 4_f
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_f
	setcycle 49 syllable du
	setcycle 49 tone_gender 2_f
	setcycle 50 syllable kou
	setcycle 50 tone_gender 3_f
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_f
	setcycle 52 syllable du
	setcycle 52 tone_gender 2_f
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_f
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_f
	setcycle 55 syllable kou
	setcycle 55 tone_gender 3_f
	setcycle 56 syllable ge
	setcycle 56 tone_gender 1_f
	setcycle 57 syllable du
	setcycle 57 tone_gender 2_f
	setcycle 58 syllable kou
	setcycle 58 tone_gender 3_f
	setcycle 59 syllable kou
	setcycle 59 tone_gender 3_f
	setcycle 60 syllable kou
	setcycle 60 tone_gender 3_f
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_f
	setcycle 62 syllable bi
	setcycle 62 tone_gender 4_f
	setcycle 63 syllable ge
	setcycle 63 tone_gender 1_f
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_f
	setcycle 65 syllable du
	setcycle 65 tone_gender 2_f
	setcycle 66 syllable du
	setcycle 66 tone_gender 2_f
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_f
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_f
	setcycle 69 syllable bi
	setcycle 69 tone_gender 4_f
	setcycle 70 syllable du
	setcycle 70 tone_gender 2_f
	setcycle 71 syllable bi
	setcycle 71 tone_gender 4_f
	setcycle 72 syllable kou
	setcycle 72 tone_gender 3_f
	setcycle 73 syllable G
	setcycle 73 tone_gender "_"
	setcycle 74 syllable du
	setcycle 74 tone_gender 2_f
	setcycle 75 syllable du
	setcycle 75 tone_gender 2_f
	setcycle 76 syllable ge
	setcycle 76 tone_gender 1_f
	setcycle 77 syllable bi
	setcycle 77 tone_gender 3_f
	setcycle 78 syllable ge
	setcycle 78 tone_gender 1_f
	setcycle 79 syllable ge
	setcycle 79 tone_gender 3_f
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_f
	setcycle 81 syllable kou
	setcycle 81 tone_gender 3_f
	setcycle 82 syllable kou
	setcycle 82 tone_gender 3_f
	setcycle 83 syllable du
	setcycle 83 tone_gender 3_f
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_f
	setcycle 85 syllable du
	setcycle 85 tone_gender 2_f
	setcycle 86 syllable du
	setcycle 86 tone_gender 2_f
	setcycle 87 syllable du
	setcycle 87 tone_gender 2_f
	setcycle 88 syllable ge
	setcycle 88 tone_gender 1_f
	setcycle 89 syllable du
	setcycle 89 tone_gender 2_f
	setcycle 90 syllable ge
	setcycle 90 tone_gender 1_f
	setcycle 91 syllable kou
	setcycle 91 tone_gender 3_f
	setcycle 92 syllable ge
	setcycle 92 tone_gender 1_f
	setcycle 93 syllable kou
	setcycle 93 tone_gender 3_f
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_f
	setcycle 95 syllable du
	setcycle 95 tone_gender 2_f
	setcycle 96 syllable ge
	setcycle 96 tone_gender 1_f
	setcycle 97 syllable kou
	setcycle 97 tone_gender 1_f
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_f
	setcycle 99 syllable kou
	setcycle 99 tone_gender 3_f
	setcycle 100 syllable bi
	setcycle 100 tone_gender 2_f
	setcycle 101 syllable bi
	setcycle 101 tone_gender 4_f
	setcycle 102 syllable du
	setcycle 102 tone_gender 1_f
	setcycle 103 syllable bi
	setcycle 103 tone_gender 4_f
	setcycle 104 syllable bi
	setcycle 104 tone_gender 4_f
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_f
	setcycle 106 syllable kou
	setcycle 106 tone_gender 3_f
	setcycle 107 syllable du
	setcycle 107 tone_gender 2_f
	setcycle 108 syllable bi
	setcycle 108 tone_gender 4_f
	setcycle 109 syllable ge
	setcycle 109 tone_gender 1_f
	setcycle 110 syllable ge
	setcycle 110 tone_gender 1_f
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_f
	setcycle 112 syllable kou
	setcycle 112 tone_gender 3_f
	setcycle 113 syllable bi
	setcycle 113 tone_gender 4_f
	setcycle 114 syllable kou
	setcycle 114 tone_gender 3_f
	setcycle 115 syllable du
	setcycle 115 tone_gender 2_f
	setcycle 116 syllable du
	setcycle 116 tone_gender 2_f
	setcycle 117 syllable ge
	setcycle 117 tone_gender 2_f
	setcycle 118 syllable du
	setcycle 118 tone_gender 2_f
	setcycle 119 syllable ge
	setcycle 119 tone_gender 1_f
	setcycle 120 syllable du
	setcycle 120 tone_gender 2_f
	setcycle 121 syllable ge
	setcycle 121 tone_gender 1_f
	run exp_exposure_sequence_2_3_2

define loop exp_exposure_loop_f_4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable du
	setcycle 0 tone_gender 2_f
	setcycle 1 syllable bi
	setcycle 1 tone_gender 2_f
	setcycle 2 syllable ge
	setcycle 2 tone_gender 1_f
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_f
	setcycle 4 syllable bi
	setcycle 4 tone_gender 3_f
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_f
	setcycle 6 syllable kou
	setcycle 6 tone_gender 3_f
	setcycle 7 syllable du
	setcycle 7 tone_gender 2_f
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_f
	setcycle 9 syllable kou
	setcycle 9 tone_gender 3_f
	setcycle 10 syllable kou
	setcycle 10 tone_gender 3_f
	setcycle 11 syllable ge
	setcycle 11 tone_gender 1_f
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_f
	setcycle 13 syllable bi
	setcycle 13 tone_gender 4_f
	setcycle 14 syllable kou
	setcycle 14 tone_gender 3_f
	setcycle 15 syllable du
	setcycle 15 tone_gender 2_f
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_f
	setcycle 17 syllable ge
	setcycle 17 tone_gender 1_f
	setcycle 18 syllable ge
	setcycle 18 tone_gender 1_f
	setcycle 19 syllable du
	setcycle 19 tone_gender 4_f
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_f
	setcycle 21 syllable bi
	setcycle 21 tone_gender 4_f
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_f
	setcycle 23 syllable bi
	setcycle 23 tone_gender 4_f
	setcycle 24 syllable kou
	setcycle 24 tone_gender 4_f
	setcycle 25 syllable ge
	setcycle 25 tone_gender 1_f
	setcycle 26 syllable ge
	setcycle 26 tone_gender 1_f
	setcycle 27 syllable kou
	setcycle 27 tone_gender 3_f
	setcycle 28 syllable kou
	setcycle 28 tone_gender 1_f
	setcycle 29 syllable ge
	setcycle 29 tone_gender 3_f
	setcycle 30 syllable ge
	setcycle 30 tone_gender 1_f
	setcycle 31 syllable du
	setcycle 31 tone_gender 2_f
	setcycle 32 syllable du
	setcycle 32 tone_gender 2_f
	setcycle 33 syllable bi
	setcycle 33 tone_gender 4_f
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_f
	setcycle 35 syllable ge
	setcycle 35 tone_gender 1_f
	setcycle 36 syllable bi
	setcycle 36 tone_gender 4_f
	setcycle 37 syllable bi
	setcycle 37 tone_gender 4_f
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_f
	setcycle 39 syllable du
	setcycle 39 tone_gender 2_f
	setcycle 40 syllable ge
	setcycle 40 tone_gender 1_f
	setcycle 41 syllable bi
	setcycle 41 tone_gender 3_f
	setcycle 42 syllable ge
	setcycle 42 tone_gender 1_f
	setcycle 43 syllable du
	setcycle 43 tone_gender 2_f
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_f
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_f
	setcycle 46 syllable du
	setcycle 46 tone_gender 2_f
	setcycle 47 syllable du
	setcycle 47 tone_gender 2_f
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_f
	setcycle 49 syllable kou
	setcycle 49 tone_gender 4_f
	setcycle 50 syllable bi
	setcycle 50 tone_gender 4_f
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_f
	setcycle 52 syllable bi
	setcycle 52 tone_gender 4_f
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_f
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_f
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_f
	setcycle 56 syllable ge
	setcycle 56 tone_gender 1_f
	setcycle 57 syllable bi
	setcycle 57 tone_gender 4_f
	setcycle 58 syllable du
	setcycle 58 tone_gender 2_f
	setcycle 59 syllable bi
	setcycle 59 tone_gender 4_f
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_f
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_f
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_f
	setcycle 63 syllable du
	setcycle 63 tone_gender 2_f
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_f
	setcycle 65 syllable ge
	setcycle 65 tone_gender 1_f
	setcycle 66 syllable bi
	setcycle 66 tone_gender 2_f
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_f
	setcycle 68 syllable du
	setcycle 68 tone_gender 2_f
	setcycle 69 syllable ge
	setcycle 69 tone_gender 1_f
	setcycle 70 syllable bi
	setcycle 70 tone_gender 2_f
	setcycle 71 syllable du
	setcycle 71 tone_gender 2_f
	setcycle 72 syllable kou
	setcycle 72 tone_gender 4_f
	setcycle 73 syllable kou
	setcycle 73 tone_gender 3_f
	setcycle 74 syllable bi
	setcycle 74 tone_gender 4_f
	setcycle 75 syllable ge
	setcycle 75 tone_gender 1_f
	setcycle 76 syllable bi
	setcycle 76 tone_gender 4_f
	setcycle 77 syllable bi
	setcycle 77 tone_gender 4_f
	setcycle 78 syllable kou
	setcycle 78 tone_gender 3_f
	setcycle 79 syllable kou
	setcycle 79 tone_gender 3_f
	setcycle 80 syllable du
	setcycle 80 tone_gender 2_f
	setcycle 81 syllable du
	setcycle 81 tone_gender 2_f
	setcycle 82 syllable bi
	setcycle 82 tone_gender 4_f
	setcycle 83 syllable kou
	setcycle 83 tone_gender 3_f
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_f
	setcycle 85 syllable ge
	setcycle 85 tone_gender 1_f
	setcycle 86 syllable ge
	setcycle 86 tone_gender 1_f
	setcycle 87 syllable kou
	setcycle 87 tone_gender 3_f
	setcycle 88 syllable ge
	setcycle 88 tone_gender 1_f
	setcycle 89 syllable kou
	setcycle 89 tone_gender 3_f
	setcycle 90 syllable kou
	setcycle 90 tone_gender 4_f
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_f
	setcycle 92 syllable bi
	setcycle 92 tone_gender 4_f
	setcycle 93 syllable du
	setcycle 93 tone_gender 2_f
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_f
	setcycle 95 syllable kou
	setcycle 95 tone_gender 3_f
	setcycle 96 syllable du
	setcycle 96 tone_gender 2_f
	setcycle 97 syllable bi
	setcycle 97 tone_gender 4_f
	setcycle 98 syllable kou
	setcycle 98 tone_gender 3_f
	setcycle 99 syllable du
	setcycle 99 tone_gender 2_f
	setcycle 100 syllable bi
	setcycle 100 tone_gender 2_f
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_f
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_f
	setcycle 103 syllable ge
	setcycle 103 tone_gender 1_f
	setcycle 104 syllable kou
	setcycle 104 tone_gender 3_f
	setcycle 105 syllable kou
	setcycle 105 tone_gender 3_f
	setcycle 106 syllable du
	setcycle 106 tone_gender 2_f
	setcycle 107 syllable kou
	setcycle 107 tone_gender 3_f
	setcycle 108 syllable kou
	setcycle 108 tone_gender 3_f
	setcycle 109 syllable bi
	setcycle 109 tone_gender 4_f
	setcycle 110 syllable kou
	setcycle 110 tone_gender 3_f
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_f
	setcycle 112 syllable ge
	setcycle 112 tone_gender 1_f
	setcycle 113 syllable bi
	setcycle 113 tone_gender 4_f
	setcycle 114 syllable du
	setcycle 114 tone_gender 2_f
	setcycle 115 syllable kou
	setcycle 115 tone_gender 3_f
	setcycle 116 syllable du
	setcycle 116 tone_gender 2_f
	setcycle 117 syllable kou
	setcycle 117 tone_gender 3_f
	setcycle 118 syllable du
	setcycle 118 tone_gender 2_f
	setcycle 119 syllable du
	setcycle 119 tone_gender 4_f
	run exp_exposure_sequence_2_3_3

define loop exp_exposure_loop_f_5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 124
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable bi
	setcycle 0 tone_gender 4_f
	setcycle 1 syllable bi
	setcycle 1 tone_gender 4_f
	setcycle 2 syllable du
	setcycle 2 tone_gender 2_f
	setcycle 3 syllable ge
	setcycle 3 tone_gender 1_f
	setcycle 4 syllable du
	setcycle 4 tone_gender 2_f
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_f
	setcycle 6 syllable du
	setcycle 6 tone_gender 2_f
	setcycle 7 syllable D
	setcycle 7 tone_gender "_"
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_f
	setcycle 9 syllable ge
	setcycle 9 tone_gender 1_f
	setcycle 10 syllable bi
	setcycle 10 tone_gender 4_f
	setcycle 11 syllable du
	setcycle 11 tone_gender 4_f
	setcycle 12 syllable kou
	setcycle 12 tone_gender 3_f
	setcycle 13 syllable ge
	setcycle 13 tone_gender 1_f
	setcycle 14 syllable ge
	setcycle 14 tone_gender 1_f
	setcycle 15 syllable kou
	setcycle 15 tone_gender 3_f
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_f
	setcycle 17 syllable du
	setcycle 17 tone_gender 2_f
	setcycle 18 syllable bi
	setcycle 18 tone_gender 4_f
	setcycle 19 syllable bi
	setcycle 19 tone_gender 4_f
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_f
	setcycle 21 syllable ge
	setcycle 21 tone_gender 2_f
	setcycle 22 syllable du
	setcycle 22 tone_gender 2_f
	setcycle 23 syllable du
	setcycle 23 tone_gender 4_f
	setcycle 24 syllable du
	setcycle 24 tone_gender 2_f
	setcycle 25 syllable du
	setcycle 25 tone_gender 2_f
	setcycle 26 syllable bi
	setcycle 26 tone_gender 4_f
	setcycle 27 syllable G
	setcycle 27 tone_gender "_"
	setcycle 28 syllable du
	setcycle 28 tone_gender 2_f
	setcycle 29 syllable kou
	setcycle 29 tone_gender 3_f
	setcycle 30 syllable kou
	setcycle 30 tone_gender 4_f
	setcycle 31 syllable kou
	setcycle 31 tone_gender 3_f
	setcycle 32 syllable kou
	setcycle 32 tone_gender 3_f
	setcycle 33 syllable kou
	setcycle 33 tone_gender 3_f
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_f
	setcycle 35 syllable kou
	setcycle 35 tone_gender 2_f
	setcycle 36 syllable du
	setcycle 36 tone_gender 2_f
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_f
	setcycle 38 syllable ge
	setcycle 38 tone_gender 1_f
	setcycle 39 syllable kou
	setcycle 39 tone_gender 3_f
	setcycle 40 syllable bi
	setcycle 40 tone_gender 3_f
	setcycle 41 syllable ge
	setcycle 41 tone_gender 1_f
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_f
	setcycle 43 syllable du
	setcycle 43 tone_gender 2_f
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_f
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_f
	setcycle 46 syllable ge
	setcycle 46 tone_gender 1_f
	setcycle 47 syllable E
	setcycle 47 tone_gender "_"
	setcycle 48 syllable bi
	setcycle 48 tone_gender 4_f
	setcycle 49 syllable A
	setcycle 49 tone_gender "_"
	setcycle 50 syllable ge
	setcycle 50 tone_gender 1_f
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_f
	setcycle 52 syllable ge
	setcycle 52 tone_gender 1_f
	setcycle 53 syllable du
	setcycle 53 tone_gender 2_f
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_f
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_f
	setcycle 56 syllable kou
	setcycle 56 tone_gender 3_f
	setcycle 57 syllable kou
	setcycle 57 tone_gender 3_f
	setcycle 58 syllable ge
	setcycle 58 tone_gender 1_f
	setcycle 59 syllable ge
	setcycle 59 tone_gender 1_f
	setcycle 60 syllable kou
	setcycle 60 tone_gender 3_f
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_f
	setcycle 62 syllable bi
	setcycle 62 tone_gender 4_f
	setcycle 63 syllable kou
	setcycle 63 tone_gender 3_f
	setcycle 64 syllable bi
	setcycle 64 tone_gender 4_f
	setcycle 65 syllable kou
	setcycle 65 tone_gender 3_f
	setcycle 66 syllable bi
	setcycle 66 tone_gender 4_f
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_f
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_f
	setcycle 69 syllable kou
	setcycle 69 tone_gender 3_f
	setcycle 70 syllable ge
	setcycle 70 tone_gender 3_f
	setcycle 71 syllable bi
	setcycle 71 tone_gender 4_f
	setcycle 72 syllable ge
	setcycle 72 tone_gender 1_f
	setcycle 73 syllable bi
	setcycle 73 tone_gender 4_f
	setcycle 74 syllable du
	setcycle 74 tone_gender 2_f
	setcycle 75 syllable ge
	setcycle 75 tone_gender 1_f
	setcycle 76 syllable du
	setcycle 76 tone_gender 2_f
	setcycle 77 syllable du
	setcycle 77 tone_gender 2_f
	setcycle 78 syllable ge
	setcycle 78 tone_gender 1_f
	setcycle 79 syllable kou
	setcycle 79 tone_gender 1_f
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_f
	setcycle 81 syllable ge
	setcycle 81 tone_gender 1_f
	setcycle 82 syllable ge
	setcycle 82 tone_gender 1_f
	setcycle 83 syllable ge
	setcycle 83 tone_gender 1_f
	setcycle 84 syllable ge
	setcycle 84 tone_gender 1_f
	setcycle 85 syllable du
	setcycle 85 tone_gender 2_f
	setcycle 86 syllable du
	setcycle 86 tone_gender 2_f
	setcycle 87 syllable ge
	setcycle 87 tone_gender 1_f
	setcycle 88 syllable ge
	setcycle 88 tone_gender 3_f
	setcycle 89 syllable ge
	setcycle 89 tone_gender 1_f
	setcycle 90 syllable bi
	setcycle 90 tone_gender 4_f
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_f
	setcycle 92 syllable kou
	setcycle 92 tone_gender 3_f
	setcycle 93 syllable bi
	setcycle 93 tone_gender 4_f
	setcycle 94 syllable kou
	setcycle 94 tone_gender 3_f
	setcycle 95 syllable bi
	setcycle 95 tone_gender 2_f
	setcycle 96 syllable kou
	setcycle 96 tone_gender 3_f
	setcycle 97 syllable bi
	setcycle 97 tone_gender 4_f
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_f
	setcycle 99 syllable bi
	setcycle 99 tone_gender 4_f
	setcycle 100 syllable ge
	setcycle 100 tone_gender 1_f
	setcycle 101 syllable bi
	setcycle 101 tone_gender 4_f
	setcycle 102 syllable ge
	setcycle 102 tone_gender 1_f
	setcycle 103 syllable ge
	setcycle 103 tone_gender 1_f
	setcycle 104 syllable ge
	setcycle 104 tone_gender 1_f
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_f
	setcycle 106 syllable bi
	setcycle 106 tone_gender 4_f
	setcycle 107 syllable kou
	setcycle 107 tone_gender 3_f
	setcycle 108 syllable kou
	setcycle 108 tone_gender 3_f
	setcycle 109 syllable du
	setcycle 109 tone_gender 2_f
	setcycle 110 syllable ge
	setcycle 110 tone_gender 1_f
	setcycle 111 syllable ge
	setcycle 111 tone_gender 1_f
	setcycle 112 syllable kou
	setcycle 112 tone_gender 3_f
	setcycle 113 syllable du
	setcycle 113 tone_gender 2_f
	setcycle 114 syllable ge
	setcycle 114 tone_gender 1_f
	setcycle 115 syllable kou
	setcycle 115 tone_gender 3_f
	setcycle 116 syllable ge
	setcycle 116 tone_gender 1_f
	setcycle 117 syllable ge
	setcycle 117 tone_gender 1_f
	setcycle 118 syllable bi
	setcycle 118 tone_gender 4_f
	setcycle 119 syllable kou
	setcycle 119 tone_gender 3_f
	setcycle 120 syllable bi
	setcycle 120 tone_gender 4_f
	setcycle 121 syllable bi
	setcycle 121 tone_gender 4_f
	setcycle 122 syllable bi
	setcycle 122 tone_gender 4_f
	setcycle 123 syllable ge
	setcycle 123 tone_gender 1_f
	run exp_exposure_sequence_2_3_4

define loop exp_exposure_loop_m_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 124
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable du
	setcycle 0 tone_gender 2_m
	setcycle 1 syllable ge
	setcycle 1 tone_gender 3_m
	setcycle 2 syllable ge
	setcycle 2 tone_gender 1_m
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_m
	setcycle 4 syllable kou
	setcycle 4 tone_gender 3_m
	setcycle 5 syllable bi
	setcycle 5 tone_gender 4_m
	setcycle 6 syllable bi
	setcycle 6 tone_gender 4_m
	setcycle 7 syllable ge
	setcycle 7 tone_gender 1_m
	setcycle 8 syllable kou
	setcycle 8 tone_gender 3_m
	setcycle 9 syllable kou
	setcycle 9 tone_gender 3_m
	setcycle 10 syllable bi
	setcycle 10 tone_gender 4_m
	setcycle 11 syllable ge
	setcycle 11 tone_gender 1_m
	setcycle 12 syllable kou
	setcycle 12 tone_gender 1_m
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_m
	setcycle 14 syllable bi
	setcycle 14 tone_gender 4_m
	setcycle 15 syllable kou
	setcycle 15 tone_gender 3_m
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_m
	setcycle 17 syllable G
	setcycle 17 tone_gender "_"
	setcycle 18 syllable ge
	setcycle 18 tone_gender 1_m
	setcycle 19 syllable A
	setcycle 19 tone_gender "_"
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_m
	setcycle 21 syllable du
	setcycle 21 tone_gender 2_m
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_m
	setcycle 23 syllable ge
	setcycle 23 tone_gender 1_m
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_m
	setcycle 25 syllable kou
	setcycle 25 tone_gender 3_m
	setcycle 26 syllable ge
	setcycle 26 tone_gender 1_m
	setcycle 27 syllable kou
	setcycle 27 tone_gender 3_m
	setcycle 28 syllable kou
	setcycle 28 tone_gender 3_m
	setcycle 29 syllable kou
	setcycle 29 tone_gender 3_m
	setcycle 30 syllable ge
	setcycle 30 tone_gender 1_m
	setcycle 31 syllable du
	setcycle 31 tone_gender 2_m
	setcycle 32 syllable kou
	setcycle 32 tone_gender 3_m
	setcycle 33 syllable kou
	setcycle 33 tone_gender 1_m
	setcycle 34 syllable ge
	setcycle 34 tone_gender 1_m
	setcycle 35 syllable kou
	setcycle 35 tone_gender 3_m
	setcycle 36 syllable du
	setcycle 36 tone_gender 2_m
	setcycle 37 syllable du
	setcycle 37 tone_gender 2_m
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_m
	setcycle 39 syllable ge
	setcycle 39 tone_gender 1_m
	setcycle 40 syllable ge
	setcycle 40 tone_gender 1_m
	setcycle 41 syllable kou
	setcycle 41 tone_gender 3_m
	setcycle 42 syllable ge
	setcycle 42 tone_gender 2_m
	setcycle 43 syllable kou
	setcycle 43 tone_gender 3_m
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_m
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_m
	setcycle 46 syllable bi
	setcycle 46 tone_gender 3_m
	setcycle 47 syllable du
	setcycle 47 tone_gender 2_m
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_m
	setcycle 49 syllable bi
	setcycle 49 tone_gender 4_m
	setcycle 50 syllable du
	setcycle 50 tone_gender 2_m
	setcycle 51 syllable kou
	setcycle 51 tone_gender 3_m
	setcycle 52 syllable bi
	setcycle 52 tone_gender 4_m
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_m
	setcycle 54 syllable bi
	setcycle 54 tone_gender 4_m
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_m
	setcycle 56 syllable bi
	setcycle 56 tone_gender 4_m
	setcycle 57 syllable du
	setcycle 57 tone_gender 1_m
	setcycle 58 syllable du
	setcycle 58 tone_gender 1_m
	setcycle 59 syllable E
	setcycle 59 tone_gender "_"
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_m
	setcycle 61 syllable du
	setcycle 61 tone_gender 2_m
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_m
	setcycle 63 syllable bi
	setcycle 63 tone_gender 4_m
	setcycle 64 syllable du
	setcycle 64 tone_gender 2_m
	setcycle 65 syllable ge
	setcycle 65 tone_gender 1_m
	setcycle 66 syllable ge
	setcycle 66 tone_gender 3_m
	setcycle 67 syllable kou
	setcycle 67 tone_gender 3_m
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_m
	setcycle 69 syllable bi
	setcycle 69 tone_gender 4_m
	setcycle 70 syllable kou
	setcycle 70 tone_gender 3_m
	setcycle 71 syllable kou
	setcycle 71 tone_gender 3_m
	setcycle 72 syllable ge
	setcycle 72 tone_gender 1_m
	setcycle 73 syllable ge
	setcycle 73 tone_gender 1_m
	setcycle 74 syllable kou
	setcycle 74 tone_gender 3_m
	setcycle 75 syllable bi
	setcycle 75 tone_gender 4_m
	setcycle 76 syllable ge
	setcycle 76 tone_gender 1_m
	setcycle 77 syllable ge
	setcycle 77 tone_gender 2_m
	setcycle 78 syllable kou
	setcycle 78 tone_gender 3_m
	setcycle 79 syllable kou
	setcycle 79 tone_gender 3_m
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_m
	setcycle 81 syllable bi
	setcycle 81 tone_gender 4_m
	setcycle 82 syllable du
	setcycle 82 tone_gender 2_m
	setcycle 83 syllable ge
	setcycle 83 tone_gender 1_m
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_m
	setcycle 85 syllable bi
	setcycle 85 tone_gender 1_m
	setcycle 86 syllable bi
	setcycle 86 tone_gender 4_m
	setcycle 87 syllable ge
	setcycle 87 tone_gender 2_m
	setcycle 88 syllable du
	setcycle 88 tone_gender 2_m
	setcycle 89 syllable bi
	setcycle 89 tone_gender 4_m
	setcycle 90 syllable ge
	setcycle 90 tone_gender 1_m
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_m
	setcycle 92 syllable du
	setcycle 92 tone_gender 2_m
	setcycle 93 syllable du
	setcycle 93 tone_gender 4_m
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_m
	setcycle 95 syllable ge
	setcycle 95 tone_gender 1_m
	setcycle 96 syllable du
	setcycle 96 tone_gender 2_m
	setcycle 97 syllable ge
	setcycle 97 tone_gender 1_m
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_m
	setcycle 99 syllable du
	setcycle 99 tone_gender 2_m
	setcycle 100 syllable bi
	setcycle 100 tone_gender 4_m
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_m
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_m
	setcycle 103 syllable kou
	setcycle 103 tone_gender 3_m
	setcycle 104 syllable bi
	setcycle 104 tone_gender 2_m
	setcycle 105 syllable ge
	setcycle 105 tone_gender 1_m
	setcycle 106 syllable du
	setcycle 106 tone_gender 2_m
	setcycle 107 syllable bi
	setcycle 107 tone_gender 4_m
	setcycle 108 syllable bi
	setcycle 108 tone_gender 4_m
	setcycle 109 syllable bi
	setcycle 109 tone_gender 4_m
	setcycle 110 syllable bi
	setcycle 110 tone_gender 4_m
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_m
	setcycle 112 syllable du
	setcycle 112 tone_gender 2_m
	setcycle 113 syllable kou
	setcycle 113 tone_gender 3_m
	setcycle 114 syllable ge
	setcycle 114 tone_gender 1_m
	setcycle 115 syllable bi
	setcycle 115 tone_gender 4_m
	setcycle 116 syllable kou
	setcycle 116 tone_gender 3_m
	setcycle 117 syllable du
	setcycle 117 tone_gender 2_m
	setcycle 118 syllable D
	setcycle 118 tone_gender "_"
	setcycle 119 syllable bi
	setcycle 119 tone_gender 4_m
	setcycle 120 syllable kou
	setcycle 120 tone_gender 3_m
	setcycle 121 syllable du
	setcycle 121 tone_gender 2_m
	setcycle 122 syllable bi
	setcycle 122 tone_gender 4_m
	setcycle 123 syllable kou
	setcycle 123 tone_gender 3_m
	run exp_exposure_sequence

define loop exp_exposure_loop_m_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 121
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable kou
	setcycle 0 tone_gender 3_m
	setcycle 1 syllable kou
	setcycle 1 tone_gender 3_m
	setcycle 2 syllable kou
	setcycle 2 tone_gender 3_m
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_m
	setcycle 4 syllable du
	setcycle 4 tone_gender 2_m
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_m
	setcycle 6 syllable du
	setcycle 6 tone_gender 2_m
	setcycle 7 syllable du
	setcycle 7 tone_gender 1_m
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_m
	setcycle 9 syllable ge
	setcycle 9 tone_gender 2_m
	setcycle 10 syllable kou
	setcycle 10 tone_gender 3_m
	setcycle 11 syllable kou
	setcycle 11 tone_gender 1_m
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_m
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_m
	setcycle 14 syllable kou
	setcycle 14 tone_gender 3_m
	setcycle 15 syllable ge
	setcycle 15 tone_gender 1_m
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_m
	setcycle 17 syllable kou
	setcycle 17 tone_gender 3_m
	setcycle 18 syllable kou
	setcycle 18 tone_gender 3_m
	setcycle 19 syllable ge
	setcycle 19 tone_gender 1_m
	setcycle 20 syllable bi
	setcycle 20 tone_gender 1_m
	setcycle 21 syllable ge
	setcycle 21 tone_gender 1_m
	setcycle 22 syllable kou
	setcycle 22 tone_gender 4_m
	setcycle 23 syllable du
	setcycle 23 tone_gender 2_m
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_m
	setcycle 25 syllable du
	setcycle 25 tone_gender 2_m
	setcycle 26 syllable du
	setcycle 26 tone_gender 2_m
	setcycle 27 syllable du
	setcycle 27 tone_gender 2_m
	setcycle 28 syllable ge
	setcycle 28 tone_gender 1_m
	setcycle 29 syllable bi
	setcycle 29 tone_gender 4_m
	setcycle 30 syllable du
	setcycle 30 tone_gender 2_m
	setcycle 31 syllable ge
	setcycle 31 tone_gender 1_m
	setcycle 32 syllable ge
	setcycle 32 tone_gender 1_m
	setcycle 33 syllable kou
	setcycle 33 tone_gender 3_m
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_m
	setcycle 35 syllable ge
	setcycle 35 tone_gender 1_m
	setcycle 36 syllable bi
	setcycle 36 tone_gender 4_m
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_m
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_m
	setcycle 39 syllable bi
	setcycle 39 tone_gender 4_m
	setcycle 40 syllable ge
	setcycle 40 tone_gender 3_m
	setcycle 41 syllable du
	setcycle 41 tone_gender 2_m
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_m
	setcycle 43 syllable kou
	setcycle 43 tone_gender 3_m
	setcycle 44 syllable du
	setcycle 44 tone_gender 2_m
	setcycle 45 syllable bi
	setcycle 45 tone_gender 4_m
	setcycle 46 syllable bi
	setcycle 46 tone_gender 4_m
	setcycle 47 syllable bi
	setcycle 47 tone_gender 4_m
	setcycle 48 syllable A
	setcycle 48 tone_gender "_"
	setcycle 49 syllable bi
	setcycle 49 tone_gender 4_m
	setcycle 50 syllable du
	setcycle 50 tone_gender 2_m
	setcycle 51 syllable du
	setcycle 51 tone_gender 2_m
	setcycle 52 syllable ge
	setcycle 52 tone_gender 1_m
	setcycle 53 syllable du
	setcycle 53 tone_gender 2_m
	setcycle 54 syllable bi
	setcycle 54 tone_gender 4_m
	setcycle 55 syllable du
	setcycle 55 tone_gender 4_m
	setcycle 56 syllable du
	setcycle 56 tone_gender 2_m
	setcycle 57 syllable du
	setcycle 57 tone_gender 2_m
	setcycle 58 syllable ge
	setcycle 58 tone_gender 1_m
	setcycle 59 syllable bi
	setcycle 59 tone_gender 4_m
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_m
	setcycle 61 syllable du
	setcycle 61 tone_gender 2_m
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_m
	setcycle 63 syllable du
	setcycle 63 tone_gender 2_m
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_m
	setcycle 65 syllable du
	setcycle 65 tone_gender 2_m
	setcycle 66 syllable bi
	setcycle 66 tone_gender 4_m
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_m
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_m
	setcycle 69 syllable ge
	setcycle 69 tone_gender 1_m
	setcycle 70 syllable bi
	setcycle 70 tone_gender 4_m
	setcycle 71 syllable kou
	setcycle 71 tone_gender 3_m
	setcycle 72 syllable kou
	setcycle 72 tone_gender 3_m
	setcycle 73 syllable bi
	setcycle 73 tone_gender 4_m
	setcycle 74 syllable bi
	setcycle 74 tone_gender 4_m
	setcycle 75 syllable kou
	setcycle 75 tone_gender 3_m
	setcycle 76 syllable kou
	setcycle 76 tone_gender 3_m
	setcycle 77 syllable kou
	setcycle 77 tone_gender 3_m
	setcycle 78 syllable bi
	setcycle 78 tone_gender 4_m
	setcycle 79 syllable kou
	setcycle 79 tone_gender 1_m
	setcycle 80 syllable ge
	setcycle 80 tone_gender 1_m
	setcycle 81 syllable ge
	setcycle 81 tone_gender 1_m
	setcycle 82 syllable ge
	setcycle 82 tone_gender 1_m
	setcycle 83 syllable bi
	setcycle 83 tone_gender 4_m
	setcycle 84 syllable ge
	setcycle 84 tone_gender 1_m
	setcycle 85 syllable bi
	setcycle 85 tone_gender 4_m
	setcycle 86 syllable ge
	setcycle 86 tone_gender 1_m
	setcycle 87 syllable du
	setcycle 87 tone_gender 2_m
	setcycle 88 syllable du
	setcycle 88 tone_gender 2_m
	setcycle 89 syllable bi
	setcycle 89 tone_gender 4_m
	setcycle 90 syllable bi
	setcycle 90 tone_gender 4_m
	setcycle 91 syllable kou
	setcycle 91 tone_gender 3_m
	setcycle 92 syllable kou
	setcycle 92 tone_gender 3_m
	setcycle 93 syllable du
	setcycle 93 tone_gender 2_m
	setcycle 94 syllable ge
	setcycle 94 tone_gender 1_m
	setcycle 95 syllable bi
	setcycle 95 tone_gender 4_m
	setcycle 96 syllable kou
	setcycle 96 tone_gender 3_m
	setcycle 97 syllable kou
	setcycle 97 tone_gender 4_m
	setcycle 98 syllable kou
	setcycle 98 tone_gender 3_m
	setcycle 99 syllable ge
	setcycle 99 tone_gender 2_m
	setcycle 100 syllable kou
	setcycle 100 tone_gender 3_m
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_m
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_m
	setcycle 103 syllable bi
	setcycle 103 tone_gender 3_m
	setcycle 104 syllable ge
	setcycle 104 tone_gender 1_m
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_m
	setcycle 106 syllable kou
	setcycle 106 tone_gender 3_m
	setcycle 107 syllable ge
	setcycle 107 tone_gender 1_m
	setcycle 108 syllable ge
	setcycle 108 tone_gender 1_m
	setcycle 109 syllable du
	setcycle 109 tone_gender 2_m
	setcycle 110 syllable bi
	setcycle 110 tone_gender 4_m
	setcycle 111 syllable du
	setcycle 111 tone_gender 1_m
	setcycle 112 syllable ge
	setcycle 112 tone_gender 1_m
	setcycle 113 syllable kou
	setcycle 113 tone_gender 3_m
	setcycle 114 syllable bi
	setcycle 114 tone_gender 4_m
	setcycle 115 syllable ge
	setcycle 115 tone_gender 1_m
	setcycle 116 syllable ge
	setcycle 116 tone_gender 1_m
	setcycle 117 syllable kou
	setcycle 117 tone_gender 3_m
	setcycle 118 syllable ge
	setcycle 118 tone_gender 1_m
	setcycle 119 syllable du
	setcycle 119 tone_gender 2_m
	setcycle 120 syllable bi
	setcycle 120 tone_gender 4_m
	run exp_exposure_sequence_1

define loop exp_exposure_loop_m_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 122
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable kou
	setcycle 0 tone_gender 3_m
	setcycle 1 syllable bi
	setcycle 1 tone_gender 4_m
	setcycle 2 syllable du
	setcycle 2 tone_gender 2_m
	setcycle 3 syllable ge
	setcycle 3 tone_gender 1_m
	setcycle 4 syllable ge
	setcycle 4 tone_gender 1_m
	setcycle 5 syllable ge
	setcycle 5 tone_gender 4_m
	setcycle 6 syllable ge
	setcycle 6 tone_gender 1_m
	setcycle 7 syllable du
	setcycle 7 tone_gender 2_m
	setcycle 8 syllable du
	setcycle 8 tone_gender 2_m
	setcycle 9 syllable ge
	setcycle 9 tone_gender 1_m
	setcycle 10 syllable du
	setcycle 10 tone_gender 2_m
	setcycle 11 syllable du
	setcycle 11 tone_gender 1_m
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_m
	setcycle 13 syllable du
	setcycle 13 tone_gender 2_m
	setcycle 14 syllable bi
	setcycle 14 tone_gender 4_m
	setcycle 15 syllable ge
	setcycle 15 tone_gender 1_m
	setcycle 16 syllable du
	setcycle 16 tone_gender 2_m
	setcycle 17 syllable ge
	setcycle 17 tone_gender 1_m
	setcycle 18 syllable du
	setcycle 18 tone_gender 2_m
	setcycle 19 syllable bi
	setcycle 19 tone_gender 4_m
	setcycle 20 syllable ge
	setcycle 20 tone_gender 1_m
	setcycle 21 syllable bi
	setcycle 21 tone_gender 4_m
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_m
	setcycle 23 syllable kou
	setcycle 23 tone_gender 3_m
	setcycle 24 syllable bi
	setcycle 24 tone_gender 4_m
	setcycle 25 syllable ge
	setcycle 25 tone_gender 1_m
	setcycle 26 syllable kou
	setcycle 26 tone_gender 3_m
	setcycle 27 syllable ge
	setcycle 27 tone_gender 1_m
	setcycle 28 syllable bi
	setcycle 28 tone_gender 4_m
	setcycle 29 syllable bi
	setcycle 29 tone_gender 4_m
	setcycle 30 syllable du
	setcycle 30 tone_gender 3_m
	setcycle 31 syllable du
	setcycle 31 tone_gender 4_m
	setcycle 32 syllable ge
	setcycle 32 tone_gender 1_m
	setcycle 33 syllable ge
	setcycle 33 tone_gender 1_m
	setcycle 34 syllable E
	setcycle 34 tone_gender "_"
	setcycle 35 syllable bi
	setcycle 35 tone_gender 4_m
	setcycle 36 syllable ge
	setcycle 36 tone_gender 1_m
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_m
	setcycle 38 syllable ge
	setcycle 38 tone_gender 1_m
	setcycle 39 syllable ge
	setcycle 39 tone_gender 1_m
	setcycle 40 syllable du
	setcycle 40 tone_gender 2_m
	setcycle 41 syllable kou
	setcycle 41 tone_gender 3_m
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_m
	setcycle 43 syllable ge
	setcycle 43 tone_gender 1_m
	setcycle 44 syllable ge
	setcycle 44 tone_gender 1_m
	setcycle 45 syllable bi
	setcycle 45 tone_gender 4_m
	setcycle 46 syllable bi
	setcycle 46 tone_gender 4_m
	setcycle 47 syllable bi
	setcycle 47 tone_gender 4_m
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_m
	setcycle 49 syllable du
	setcycle 49 tone_gender 2_m
	setcycle 50 syllable kou
	setcycle 50 tone_gender 3_m
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_m
	setcycle 52 syllable du
	setcycle 52 tone_gender 2_m
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_m
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_m
	setcycle 55 syllable kou
	setcycle 55 tone_gender 3_m
	setcycle 56 syllable ge
	setcycle 56 tone_gender 1_m
	setcycle 57 syllable du
	setcycle 57 tone_gender 2_m
	setcycle 58 syllable kou
	setcycle 58 tone_gender 3_m
	setcycle 59 syllable kou
	setcycle 59 tone_gender 3_m
	setcycle 60 syllable kou
	setcycle 60 tone_gender 3_m
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_m
	setcycle 62 syllable bi
	setcycle 62 tone_gender 4_m
	setcycle 63 syllable ge
	setcycle 63 tone_gender 1_m
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_m
	setcycle 65 syllable du
	setcycle 65 tone_gender 2_m
	setcycle 66 syllable du
	setcycle 66 tone_gender 2_m
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_m
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_m
	setcycle 69 syllable bi
	setcycle 69 tone_gender 4_m
	setcycle 70 syllable du
	setcycle 70 tone_gender 2_m
	setcycle 71 syllable bi
	setcycle 71 tone_gender 4_m
	setcycle 72 syllable kou
	setcycle 72 tone_gender 3_m
	setcycle 73 syllable G
	setcycle 73 tone_gender "_"
	setcycle 74 syllable du
	setcycle 74 tone_gender 2_m
	setcycle 75 syllable du
	setcycle 75 tone_gender 2_m
	setcycle 76 syllable ge
	setcycle 76 tone_gender 1_m
	setcycle 77 syllable bi
	setcycle 77 tone_gender 3_m
	setcycle 78 syllable ge
	setcycle 78 tone_gender 1_m
	setcycle 79 syllable ge
	setcycle 79 tone_gender 3_m
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_m
	setcycle 81 syllable kou
	setcycle 81 tone_gender 3_m
	setcycle 82 syllable kou
	setcycle 82 tone_gender 3_m
	setcycle 83 syllable du
	setcycle 83 tone_gender 3_m
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_m
	setcycle 85 syllable du
	setcycle 85 tone_gender 2_m
	setcycle 86 syllable du
	setcycle 86 tone_gender 2_m
	setcycle 87 syllable du
	setcycle 87 tone_gender 2_m
	setcycle 88 syllable ge
	setcycle 88 tone_gender 1_m
	setcycle 89 syllable du
	setcycle 89 tone_gender 2_m
	setcycle 90 syllable ge
	setcycle 90 tone_gender 1_m
	setcycle 91 syllable kou
	setcycle 91 tone_gender 3_m
	setcycle 92 syllable ge
	setcycle 92 tone_gender 1_m
	setcycle 93 syllable kou
	setcycle 93 tone_gender 3_m
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_m
	setcycle 95 syllable du
	setcycle 95 tone_gender 2_m
	setcycle 96 syllable ge
	setcycle 96 tone_gender 1_m
	setcycle 97 syllable kou
	setcycle 97 tone_gender 1_m
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_m
	setcycle 99 syllable kou
	setcycle 99 tone_gender 3_m
	setcycle 100 syllable bi
	setcycle 100 tone_gender 2_m
	setcycle 101 syllable bi
	setcycle 101 tone_gender 4_m
	setcycle 102 syllable du
	setcycle 102 tone_gender 1_m
	setcycle 103 syllable bi
	setcycle 103 tone_gender 4_m
	setcycle 104 syllable bi
	setcycle 104 tone_gender 4_m
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_m
	setcycle 106 syllable kou
	setcycle 106 tone_gender 3_m
	setcycle 107 syllable du
	setcycle 107 tone_gender 2_m
	setcycle 108 syllable bi
	setcycle 108 tone_gender 4_m
	setcycle 109 syllable ge
	setcycle 109 tone_gender 1_m
	setcycle 110 syllable ge
	setcycle 110 tone_gender 1_m
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_m
	setcycle 112 syllable kou
	setcycle 112 tone_gender 3_m
	setcycle 113 syllable bi
	setcycle 113 tone_gender 4_m
	setcycle 114 syllable kou
	setcycle 114 tone_gender 3_m
	setcycle 115 syllable du
	setcycle 115 tone_gender 2_m
	setcycle 116 syllable du
	setcycle 116 tone_gender 2_m
	setcycle 117 syllable ge
	setcycle 117 tone_gender 2_m
	setcycle 118 syllable du
	setcycle 118 tone_gender 2_m
	setcycle 119 syllable ge
	setcycle 119 tone_gender 1_m
	setcycle 120 syllable du
	setcycle 120 tone_gender 2_m
	setcycle 121 syllable ge
	setcycle 121 tone_gender 1_m
	run exp_exposure_sequence_2

define loop exp_exposure_loop_m_4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable du
	setcycle 0 tone_gender 2_m
	setcycle 1 syllable bi
	setcycle 1 tone_gender 2_m
	setcycle 2 syllable ge
	setcycle 2 tone_gender 1_m
	setcycle 3 syllable kou
	setcycle 3 tone_gender 3_m
	setcycle 4 syllable bi
	setcycle 4 tone_gender 3_m
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_m
	setcycle 6 syllable kou
	setcycle 6 tone_gender 3_m
	setcycle 7 syllable du
	setcycle 7 tone_gender 2_m
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_m
	setcycle 9 syllable kou
	setcycle 9 tone_gender 3_m
	setcycle 10 syllable kou
	setcycle 10 tone_gender 3_m
	setcycle 11 syllable ge
	setcycle 11 tone_gender 1_m
	setcycle 12 syllable du
	setcycle 12 tone_gender 2_m
	setcycle 13 syllable bi
	setcycle 13 tone_gender 4_m
	setcycle 14 syllable kou
	setcycle 14 tone_gender 3_m
	setcycle 15 syllable du
	setcycle 15 tone_gender 2_m
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_m
	setcycle 17 syllable ge
	setcycle 17 tone_gender 1_m
	setcycle 18 syllable ge
	setcycle 18 tone_gender 1_m
	setcycle 19 syllable du
	setcycle 19 tone_gender 4_m
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_m
	setcycle 21 syllable bi
	setcycle 21 tone_gender 4_m
	setcycle 22 syllable kou
	setcycle 22 tone_gender 3_m
	setcycle 23 syllable bi
	setcycle 23 tone_gender 4_m
	setcycle 24 syllable kou
	setcycle 24 tone_gender 4_m
	setcycle 25 syllable ge
	setcycle 25 tone_gender 1_m
	setcycle 26 syllable ge
	setcycle 26 tone_gender 1_m
	setcycle 27 syllable kou
	setcycle 27 tone_gender 3_m
	setcycle 28 syllable kou
	setcycle 28 tone_gender 1_m
	setcycle 29 syllable ge
	setcycle 29 tone_gender 3_m
	setcycle 30 syllable ge
	setcycle 30 tone_gender 1_m
	setcycle 31 syllable du
	setcycle 31 tone_gender 2_m
	setcycle 32 syllable du
	setcycle 32 tone_gender 2_m
	setcycle 33 syllable bi
	setcycle 33 tone_gender 4_m
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_m
	setcycle 35 syllable ge
	setcycle 35 tone_gender 1_m
	setcycle 36 syllable bi
	setcycle 36 tone_gender 4_m
	setcycle 37 syllable bi
	setcycle 37 tone_gender 4_m
	setcycle 38 syllable bi
	setcycle 38 tone_gender 4_m
	setcycle 39 syllable du
	setcycle 39 tone_gender 2_m
	setcycle 40 syllable ge
	setcycle 40 tone_gender 1_m
	setcycle 41 syllable bi
	setcycle 41 tone_gender 3_m
	setcycle 42 syllable ge
	setcycle 42 tone_gender 1_m
	setcycle 43 syllable du
	setcycle 43 tone_gender 2_m
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_m
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_m
	setcycle 46 syllable du
	setcycle 46 tone_gender 2_m
	setcycle 47 syllable du
	setcycle 47 tone_gender 2_m
	setcycle 48 syllable du
	setcycle 48 tone_gender 2_m
	setcycle 49 syllable kou
	setcycle 49 tone_gender 4_m
	setcycle 50 syllable bi
	setcycle 50 tone_gender 4_m
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_m
	setcycle 52 syllable bi
	setcycle 52 tone_gender 4_m
	setcycle 53 syllable ge
	setcycle 53 tone_gender 1_m
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_m
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_m
	setcycle 56 syllable ge
	setcycle 56 tone_gender 1_m
	setcycle 57 syllable bi
	setcycle 57 tone_gender 4_m
	setcycle 58 syllable du
	setcycle 58 tone_gender 2_m
	setcycle 59 syllable bi
	setcycle 59 tone_gender 4_m
	setcycle 60 syllable du
	setcycle 60 tone_gender 2_m
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_m
	setcycle 62 syllable du
	setcycle 62 tone_gender 2_m
	setcycle 63 syllable du
	setcycle 63 tone_gender 2_m
	setcycle 64 syllable kou
	setcycle 64 tone_gender 3_m
	setcycle 65 syllable ge
	setcycle 65 tone_gender 1_m
	setcycle 66 syllable bi
	setcycle 66 tone_gender 2_m
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_m
	setcycle 68 syllable du
	setcycle 68 tone_gender 2_m
	setcycle 69 syllable ge
	setcycle 69 tone_gender 1_m
	setcycle 70 syllable bi
	setcycle 70 tone_gender 2_m
	setcycle 71 syllable du
	setcycle 71 tone_gender 2_m
	setcycle 72 syllable kou
	setcycle 72 tone_gender 4_m
	setcycle 73 syllable kou
	setcycle 73 tone_gender 3_m
	setcycle 74 syllable bi
	setcycle 74 tone_gender 4_m
	setcycle 75 syllable ge
	setcycle 75 tone_gender 1_m
	setcycle 76 syllable bi
	setcycle 76 tone_gender 4_m
	setcycle 77 syllable bi
	setcycle 77 tone_gender 4_m
	setcycle 78 syllable kou
	setcycle 78 tone_gender 3_m
	setcycle 79 syllable kou
	setcycle 79 tone_gender 3_m
	setcycle 80 syllable du
	setcycle 80 tone_gender 2_m
	setcycle 81 syllable du
	setcycle 81 tone_gender 2_m
	setcycle 82 syllable bi
	setcycle 82 tone_gender 4_m
	setcycle 83 syllable kou
	setcycle 83 tone_gender 3_m
	setcycle 84 syllable kou
	setcycle 84 tone_gender 3_m
	setcycle 85 syllable ge
	setcycle 85 tone_gender 1_m
	setcycle 86 syllable ge
	setcycle 86 tone_gender 1_m
	setcycle 87 syllable kou
	setcycle 87 tone_gender 3_m
	setcycle 88 syllable ge
	setcycle 88 tone_gender 1_m
	setcycle 89 syllable kou
	setcycle 89 tone_gender 3_m
	setcycle 90 syllable kou
	setcycle 90 tone_gender 4_m
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_m
	setcycle 92 syllable bi
	setcycle 92 tone_gender 4_m
	setcycle 93 syllable du
	setcycle 93 tone_gender 2_m
	setcycle 94 syllable bi
	setcycle 94 tone_gender 4_m
	setcycle 95 syllable kou
	setcycle 95 tone_gender 3_m
	setcycle 96 syllable du
	setcycle 96 tone_gender 2_m
	setcycle 97 syllable bi
	setcycle 97 tone_gender 4_m
	setcycle 98 syllable kou
	setcycle 98 tone_gender 3_m
	setcycle 99 syllable du
	setcycle 99 tone_gender 2_m
	setcycle 100 syllable bi
	setcycle 100 tone_gender 2_m
	setcycle 101 syllable du
	setcycle 101 tone_gender 2_m
	setcycle 102 syllable du
	setcycle 102 tone_gender 2_m
	setcycle 103 syllable ge
	setcycle 103 tone_gender 1_m
	setcycle 104 syllable kou
	setcycle 104 tone_gender 3_m
	setcycle 105 syllable kou
	setcycle 105 tone_gender 3_m
	setcycle 106 syllable du
	setcycle 106 tone_gender 2_m
	setcycle 107 syllable kou
	setcycle 107 tone_gender 3_m
	setcycle 108 syllable kou
	setcycle 108 tone_gender 3_m
	setcycle 109 syllable bi
	setcycle 109 tone_gender 4_m
	setcycle 110 syllable kou
	setcycle 110 tone_gender 3_m
	setcycle 111 syllable du
	setcycle 111 tone_gender 2_m
	setcycle 112 syllable ge
	setcycle 112 tone_gender 1_m
	setcycle 113 syllable bi
	setcycle 113 tone_gender 4_m
	setcycle 114 syllable du
	setcycle 114 tone_gender 2_m
	setcycle 115 syllable kou
	setcycle 115 tone_gender 3_m
	setcycle 116 syllable du
	setcycle 116 tone_gender 2_m
	setcycle 117 syllable kou
	setcycle 117 tone_gender 3_m
	setcycle 118 syllable du
	setcycle 118 tone_gender 2_m
	setcycle 119 syllable du
	setcycle 119 tone_gender 4_m
	run exp_exposure_sequence_2_1

define loop exp_exposure_loop_m_5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 124
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 syllable bi
	setcycle 0 tone_gender 4_m
	setcycle 1 syllable bi
	setcycle 1 tone_gender 4_m
	setcycle 2 syllable du
	setcycle 2 tone_gender 2_m
	setcycle 3 syllable ge
	setcycle 3 tone_gender 1_m
	setcycle 4 syllable du
	setcycle 4 tone_gender 2_m
	setcycle 5 syllable kou
	setcycle 5 tone_gender 3_m
	setcycle 6 syllable du
	setcycle 6 tone_gender 2_m
	setcycle 7 syllable D
	setcycle 7 tone_gender "_"
	setcycle 8 syllable bi
	setcycle 8 tone_gender 4_m
	setcycle 9 syllable ge
	setcycle 9 tone_gender 1_m
	setcycle 10 syllable bi
	setcycle 10 tone_gender 4_m
	setcycle 11 syllable du
	setcycle 11 tone_gender 4_m
	setcycle 12 syllable kou
	setcycle 12 tone_gender 3_m
	setcycle 13 syllable ge
	setcycle 13 tone_gender 1_m
	setcycle 14 syllable ge
	setcycle 14 tone_gender 1_m
	setcycle 15 syllable kou
	setcycle 15 tone_gender 3_m
	setcycle 16 syllable bi
	setcycle 16 tone_gender 4_m
	setcycle 17 syllable du
	setcycle 17 tone_gender 2_m
	setcycle 18 syllable bi
	setcycle 18 tone_gender 4_m
	setcycle 19 syllable bi
	setcycle 19 tone_gender 4_m
	setcycle 20 syllable kou
	setcycle 20 tone_gender 3_m
	setcycle 21 syllable ge
	setcycle 21 tone_gender 2_m
	setcycle 22 syllable du
	setcycle 22 tone_gender 2_m
	setcycle 23 syllable du
	setcycle 23 tone_gender 4_m
	setcycle 24 syllable du
	setcycle 24 tone_gender 2_m
	setcycle 25 syllable du
	setcycle 25 tone_gender 2_m
	setcycle 26 syllable bi
	setcycle 26 tone_gender 4_m
	setcycle 27 syllable G
	setcycle 27 tone_gender "_"
	setcycle 28 syllable du
	setcycle 28 tone_gender 2_m
	setcycle 29 syllable kou
	setcycle 29 tone_gender 3_m
	setcycle 30 syllable kou
	setcycle 30 tone_gender 4_m
	setcycle 31 syllable kou
	setcycle 31 tone_gender 3_m
	setcycle 32 syllable kou
	setcycle 32 tone_gender 3_m
	setcycle 33 syllable kou
	setcycle 33 tone_gender 3_m
	setcycle 34 syllable bi
	setcycle 34 tone_gender 4_m
	setcycle 35 syllable kou
	setcycle 35 tone_gender 2_m
	setcycle 36 syllable du
	setcycle 36 tone_gender 2_m
	setcycle 37 syllable kou
	setcycle 37 tone_gender 3_m
	setcycle 38 syllable ge
	setcycle 38 tone_gender 1_m
	setcycle 39 syllable kou
	setcycle 39 tone_gender 3_m
	setcycle 40 syllable bi
	setcycle 40 tone_gender 3_m
	setcycle 41 syllable ge
	setcycle 41 tone_gender 1_m
	setcycle 42 syllable du
	setcycle 42 tone_gender 2_m
	setcycle 43 syllable du
	setcycle 43 tone_gender 2_m
	setcycle 44 syllable bi
	setcycle 44 tone_gender 4_m
	setcycle 45 syllable kou
	setcycle 45 tone_gender 3_m
	setcycle 46 syllable ge
	setcycle 46 tone_gender 1_m
	setcycle 47 syllable E
	setcycle 47 tone_gender "_"
	setcycle 48 syllable bi
	setcycle 48 tone_gender 4_m
	setcycle 49 syllable A
	setcycle 49 tone_gender "_"
	setcycle 50 syllable ge
	setcycle 50 tone_gender 1_m
	setcycle 51 syllable ge
	setcycle 51 tone_gender 1_m
	setcycle 52 syllable ge
	setcycle 52 tone_gender 1_m
	setcycle 53 syllable du
	setcycle 53 tone_gender 2_m
	setcycle 54 syllable kou
	setcycle 54 tone_gender 3_m
	setcycle 55 syllable du
	setcycle 55 tone_gender 2_m
	setcycle 56 syllable kou
	setcycle 56 tone_gender 3_m
	setcycle 57 syllable kou
	setcycle 57 tone_gender 3_m
	setcycle 58 syllable ge
	setcycle 58 tone_gender 1_m
	setcycle 59 syllable ge
	setcycle 59 tone_gender 1_m
	setcycle 60 syllable kou
	setcycle 60 tone_gender 3_m
	setcycle 61 syllable ge
	setcycle 61 tone_gender 1_m
	setcycle 62 syllable bi
	setcycle 62 tone_gender 4_m
	setcycle 63 syllable kou
	setcycle 63 tone_gender 3_m
	setcycle 64 syllable bi
	setcycle 64 tone_gender 4_m
	setcycle 65 syllable kou
	setcycle 65 tone_gender 3_m
	setcycle 66 syllable bi
	setcycle 66 tone_gender 4_m
	setcycle 67 syllable bi
	setcycle 67 tone_gender 4_m
	setcycle 68 syllable bi
	setcycle 68 tone_gender 4_m
	setcycle 69 syllable kou
	setcycle 69 tone_gender 3_m
	setcycle 70 syllable ge
	setcycle 70 tone_gender 3_m
	setcycle 71 syllable bi
	setcycle 71 tone_gender 4_m
	setcycle 72 syllable ge
	setcycle 72 tone_gender 1_m
	setcycle 73 syllable bi
	setcycle 73 tone_gender 4_m
	setcycle 74 syllable du
	setcycle 74 tone_gender 2_m
	setcycle 75 syllable ge
	setcycle 75 tone_gender 1_m
	setcycle 76 syllable du
	setcycle 76 tone_gender 2_m
	setcycle 77 syllable du
	setcycle 77 tone_gender 2_m
	setcycle 78 syllable ge
	setcycle 78 tone_gender 1_m
	setcycle 79 syllable kou
	setcycle 79 tone_gender 1_m
	setcycle 80 syllable kou
	setcycle 80 tone_gender 3_m
	setcycle 81 syllable ge
	setcycle 81 tone_gender 1_m
	setcycle 82 syllable ge
	setcycle 82 tone_gender 1_m
	setcycle 83 syllable ge
	setcycle 83 tone_gender 1_m
	setcycle 84 syllable ge
	setcycle 84 tone_gender 1_m
	setcycle 85 syllable du
	setcycle 85 tone_gender 2_m
	setcycle 86 syllable du
	setcycle 86 tone_gender 2_m
	setcycle 87 syllable ge
	setcycle 87 tone_gender 1_m
	setcycle 88 syllable ge
	setcycle 88 tone_gender 3_m
	setcycle 89 syllable ge
	setcycle 89 tone_gender 1_m
	setcycle 90 syllable bi
	setcycle 90 tone_gender 4_m
	setcycle 91 syllable ge
	setcycle 91 tone_gender 1_m
	setcycle 92 syllable kou
	setcycle 92 tone_gender 3_m
	setcycle 93 syllable bi
	setcycle 93 tone_gender 4_m
	setcycle 94 syllable kou
	setcycle 94 tone_gender 3_m
	setcycle 95 syllable bi
	setcycle 95 tone_gender 2_m
	setcycle 96 syllable kou
	setcycle 96 tone_gender 3_m
	setcycle 97 syllable bi
	setcycle 97 tone_gender 4_m
	setcycle 98 syllable ge
	setcycle 98 tone_gender 1_m
	setcycle 99 syllable bi
	setcycle 99 tone_gender 4_m
	setcycle 100 syllable ge
	setcycle 100 tone_gender 1_m
	setcycle 101 syllable bi
	setcycle 101 tone_gender 4_m
	setcycle 102 syllable ge
	setcycle 102 tone_gender 1_m
	setcycle 103 syllable ge
	setcycle 103 tone_gender 1_m
	setcycle 104 syllable ge
	setcycle 104 tone_gender 1_m
	setcycle 105 syllable bi
	setcycle 105 tone_gender 4_m
	setcycle 106 syllable bi
	setcycle 106 tone_gender 4_m
	setcycle 107 syllable kou
	setcycle 107 tone_gender 3_m
	setcycle 108 syllable kou
	setcycle 108 tone_gender 3_m
	setcycle 109 syllable du
	setcycle 109 tone_gender 2_m
	setcycle 110 syllable ge
	setcycle 110 tone_gender 1_m
	setcycle 111 syllable ge
	setcycle 111 tone_gender 1_m
	setcycle 112 syllable kou
	setcycle 112 tone_gender 3_m
	setcycle 113 syllable du
	setcycle 113 tone_gender 2_m
	setcycle 114 syllable ge
	setcycle 114 tone_gender 1_m
	setcycle 115 syllable kou
	setcycle 115 tone_gender 3_m
	setcycle 116 syllable ge
	setcycle 116 tone_gender 1_m
	setcycle 117 syllable ge
	setcycle 117 tone_gender 1_m
	setcycle 118 syllable bi
	setcycle 118 tone_gender 4_m
	setcycle 119 syllable kou
	setcycle 119 tone_gender 3_m
	setcycle 120 syllable bi
	setcycle 120 tone_gender 4_m
	setcycle 121 syllable bi
	setcycle 121 tone_gender 4_m
	setcycle 122 syllable bi
	setcycle 122 tone_gender 4_m
	setcycle 123 syllable ge
	setcycle 123 tone_gender 1_m
	run exp_exposure_sequence_2_2

define sequence exp_exposure_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure always
	run exp_exposure_fixation always

define sequence exp_exposure_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_1 always
	run exp_exposure_fixation_1 always

define sequence exp_exposure_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2 always
	run exp_exposure_fixation_2 always

define sequence exp_exposure_sequence_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_1 always
	run exp_exposure_fixation_2_1 always

define sequence exp_exposure_sequence_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_2 always
	run exp_exposure_fixation_2_2 always

define sequence exp_exposure_sequence_2_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_3 always
	run exp_exposure_fixation_2_3 always

define sequence exp_exposure_sequence_2_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_3_1 always
	run exp_exposure_fixation_2_3_1 always

define sequence exp_exposure_sequence_2_3_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_3_2 always
	run exp_exposure_fixation_2_3_2 always

define sequence exp_exposure_sequence_2_3_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_3_3 always
	run exp_exposure_fixation_2_3_3 always

define sequence exp_exposure_sequence_2_3_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_exposure_2_3_4 always
	run exp_exposure_fixation_2_3_4 always

define logger exp_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad exp_start_test
	set duration 2995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The test part is gonna start in 3 seconds." x=0 y=0 z_index=0

define sketchpad exp_test_fixation
	set start_response_interval no
	set duration 295
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define loop exp_test_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 64
	set continuous yes
	set column_order ""
	set break_if_on_first no
	set break_if never
	setcycle 0 c1 ge1
	setcycle 0 c2 ge4
	setcycle 0 gender _f
	setcycle 0 answer 1
	setcycle 1 c1 du2
	setcycle 1 c2 ge4
	setcycle 1 gender _f
	setcycle 1 answer 1
	setcycle 2 c1 kou3
	setcycle 2 c2 ge4
	setcycle 2 gender _f
	setcycle 2 answer 1
	setcycle 3 c1 bi4
	setcycle 3 c2 ge4
	setcycle 3 gender _f
	setcycle 3 answer 1
	setcycle 4 c1 ge1
	setcycle 4 c2 du3
	setcycle 4 gender _f
	setcycle 4 answer 1
	setcycle 5 c1 du2
	setcycle 5 c2 du3
	setcycle 5 gender _f
	setcycle 5 answer 1
	setcycle 6 c1 kou3
	setcycle 6 c2 du3
	setcycle 6 gender _f
	setcycle 6 answer 1
	setcycle 7 c1 bi4
	setcycle 7 c2 du3
	setcycle 7 gender _f
	setcycle 7 answer 1
	setcycle 8 c1 ge1
	setcycle 8 c2 kou2
	setcycle 8 gender _f
	setcycle 8 answer 1
	setcycle 9 c1 du2
	setcycle 9 c2 kou2
	setcycle 9 gender _f
	setcycle 9 answer 1
	setcycle 10 c1 kou3
	setcycle 10 c2 kou2
	setcycle 10 gender _f
	setcycle 10 answer 1
	setcycle 11 c1 bi4
	setcycle 11 c2 kou2
	setcycle 11 gender _f
	setcycle 11 answer 1
	setcycle 12 c1 ge1
	setcycle 12 c2 bi1
	setcycle 12 gender _f
	setcycle 12 answer 1
	setcycle 13 c1 du2
	setcycle 13 c2 bi1
	setcycle 13 gender _f
	setcycle 13 answer 1
	setcycle 14 c1 kou3
	setcycle 14 c2 bi1
	setcycle 14 gender _f
	setcycle 14 answer 1
	setcycle 15 c1 bi4
	setcycle 15 c2 bi1
	setcycle 15 gender _f
	setcycle 15 answer 1
	setcycle 16 c1 ge1
	setcycle 16 c2 ge4
	setcycle 16 gender _m
	setcycle 16 answer 1
	setcycle 17 c1 du2
	setcycle 17 c2 ge4
	setcycle 17 gender _m
	setcycle 17 answer 1
	setcycle 18 c1 kou3
	setcycle 18 c2 ge4
	setcycle 18 gender _m
	setcycle 18 answer 1
	setcycle 19 c1 bi4
	setcycle 19 c2 ge4
	setcycle 19 gender _m
	setcycle 19 answer 1
	setcycle 20 c1 ge1
	setcycle 20 c2 du3
	setcycle 20 gender _m
	setcycle 20 answer 1
	setcycle 21 c1 du2
	setcycle 21 c2 du3
	setcycle 21 gender _m
	setcycle 21 answer 1
	setcycle 22 c1 kou3
	setcycle 22 c2 du3
	setcycle 22 gender _m
	setcycle 22 answer 1
	setcycle 23 c1 bi4
	setcycle 23 c2 du3
	setcycle 23 gender _m
	setcycle 23 answer 1
	setcycle 24 c1 ge1
	setcycle 24 c2 kou2
	setcycle 24 gender _m
	setcycle 24 answer 1
	setcycle 25 c1 du2
	setcycle 25 c2 kou2
	setcycle 25 gender _m
	setcycle 25 answer 1
	setcycle 26 c1 kou3
	setcycle 26 c2 kou2
	setcycle 26 gender _m
	setcycle 26 answer 1
	setcycle 27 c1 bi4
	setcycle 27 c2 kou2
	setcycle 27 gender _m
	setcycle 27 answer 1
	setcycle 28 c1 ge1
	setcycle 28 c2 bi1
	setcycle 28 gender _m
	setcycle 28 answer 1
	setcycle 29 c1 du2
	setcycle 29 c2 bi1
	setcycle 29 gender _m
	setcycle 29 answer 1
	setcycle 30 c1 kou3
	setcycle 30 c2 bi1
	setcycle 30 gender _m
	setcycle 30 answer 1
	setcycle 31 c1 bi4
	setcycle 31 c2 bi1
	setcycle 31 gender _m
	setcycle 31 answer 1
	setcycle 32 c1 ge4
	setcycle 32 c2 ge1
	setcycle 32 gender _f
	setcycle 32 answer 2
	setcycle 33 c1 ge4
	setcycle 33 c2 du2
	setcycle 33 gender _f
	setcycle 33 answer 2
	setcycle 34 c1 ge4
	setcycle 34 c2 kou3
	setcycle 34 gender _f
	setcycle 34 answer 2
	setcycle 35 c1 ge4
	setcycle 35 c2 bi4
	setcycle 35 gender _f
	setcycle 35 answer 2
	setcycle 36 c1 du3
	setcycle 36 c2 ge1
	setcycle 36 gender _f
	setcycle 36 answer 2
	setcycle 37 c1 du3
	setcycle 37 c2 du2
	setcycle 37 gender _f
	setcycle 37 answer 2
	setcycle 38 c1 du3
	setcycle 38 c2 kou3
	setcycle 38 gender _f
	setcycle 38 answer 2
	setcycle 39 c1 du3
	setcycle 39 c2 bi4
	setcycle 39 gender _f
	setcycle 39 answer 2
	setcycle 40 c1 kou2
	setcycle 40 c2 ge1
	setcycle 40 gender _f
	setcycle 40 answer 2
	setcycle 41 c1 kou2
	setcycle 41 c2 du2
	setcycle 41 gender _f
	setcycle 41 answer 2
	setcycle 42 c1 kou2
	setcycle 42 c2 kou3
	setcycle 42 gender _f
	setcycle 42 answer 2
	setcycle 43 c1 kou2
	setcycle 43 c2 bi4
	setcycle 43 gender _f
	setcycle 43 answer 2
	setcycle 44 c1 bi1
	setcycle 44 c2 ge1
	setcycle 44 gender _f
	setcycle 44 answer 2
	setcycle 45 c1 bi1
	setcycle 45 c2 du2
	setcycle 45 gender _f
	setcycle 45 answer 2
	setcycle 46 c1 bi1
	setcycle 46 c2 kou3
	setcycle 46 gender _f
	setcycle 46 answer 2
	setcycle 47 c1 bi1
	setcycle 47 c2 bi4
	setcycle 47 gender _f
	setcycle 47 answer 2
	setcycle 48 c1 ge4
	setcycle 48 c2 ge1
	setcycle 48 gender _m
	setcycle 48 answer 2
	setcycle 49 c1 ge4
	setcycle 49 c2 du2
	setcycle 49 gender _m
	setcycle 49 answer 2
	setcycle 50 c1 ge4
	setcycle 50 c2 kou3
	setcycle 50 gender _m
	setcycle 50 answer 2
	setcycle 51 c1 ge4
	setcycle 51 c2 bi4
	setcycle 51 gender _m
	setcycle 51 answer 2
	setcycle 52 c1 du3
	setcycle 52 c2 ge1
	setcycle 52 gender _m
	setcycle 52 answer 2
	setcycle 53 c1 du3
	setcycle 53 c2 du2
	setcycle 53 gender _m
	setcycle 53 answer 2
	setcycle 54 c1 du3
	setcycle 54 c2 kou3
	setcycle 54 gender _m
	setcycle 54 answer 2
	setcycle 55 c1 du3
	setcycle 55 c2 bi4
	setcycle 55 gender _m
	setcycle 55 answer 2
	setcycle 56 c1 kou2
	setcycle 56 c2 ge1
	setcycle 56 gender _m
	setcycle 56 answer 2
	setcycle 57 c1 kou2
	setcycle 57 c2 du2
	setcycle 57 gender _m
	setcycle 57 answer 2
	setcycle 58 c1 kou2
	setcycle 58 c2 kou3
	setcycle 58 gender _m
	setcycle 58 answer 2
	setcycle 59 c1 kou2
	setcycle 59 c2 bi4
	setcycle 59 gender _m
	setcycle 59 answer 2
	setcycle 60 c1 bi1
	setcycle 60 c2 ge1
	setcycle 60 gender _m
	setcycle 60 answer 2
	setcycle 61 c1 bi1
	setcycle 61 c2 du2
	setcycle 61 gender _m
	setcycle 61 answer 2
	setcycle 62 c1 bi1
	setcycle 62 c2 kou3
	setcycle 62 gender _m
	setcycle 62 answer 2
	setcycle 63 c1 bi1
	setcycle 63 c2 bi4
	setcycle 63 gender _m
	setcycle 63 answer 2
	run exp_test_sequence

define keyboard_response exp_test_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[answer]"
	set allowed_responses "1;2;NUM_1;NUM_2"

define sketchpad exp_test_response_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Which sounds more familiar to you?" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 1 ?" x=-160 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 2 ?" x=160 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press the number key “1” or “2” to indicate your choice" x=0 y=160 z_index=0

define sequence exp_test_sequence
	set flush_keyboard yes
	set description "A single trial"
	run exp_test_fixation always
	run exp_choice_1_sound always
	run exp_choice_1_sketchpad always
	run exp_test_fixation always
	run exp_choice_2_sound always
	run exp_choice_2_sketchpad always
	run exp_test_response_sketchpad always
	run exp_test_response always
	run exp_logger always

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run exp_block_sequence

define sampler exposure
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler exposure_2
	set volume 1
	set stop_after 0
	set sample "[syllable][tone_gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad exposure_fixation
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad exposure_fixation_2
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define loop exposure_loop_m_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous yes
	set break_if_on_first no
	set break_if never
	setcycle 0 syllable pei
	setcycle 0 tone_gender 4_m
	setcycle 1 syllable tai
	setcycle 1 tone_gender 3_m
	setcycle 2 syllable pei
	setcycle 2 tone_gender 4_m
	setcycle 3 syllable G
	setcycle 3 tone_gender "_"
	setcycle 4 syllable pei
	setcycle 4 tone_gender 4_m
	setcycle 5 syllable A
	setcycle 5 tone_gender "_"
	run exposure_sequence

define loop exposure_loop_m_2_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous yes
	set break_if_on_first no
	set break_if never
	setcycle 0 syllable pei
	setcycle 0 tone_gender 4_m
	setcycle 1 syllable tai
	setcycle 1 tone_gender 3_m
	setcycle 2 syllable pei
	setcycle 2 tone_gender 4_m
	setcycle 3 syllable G
	setcycle 3 tone_gender "_"
	setcycle 4 syllable A
	setcycle 4 tone_gender "_"
	setcycle 5 syllable pei
	setcycle 5 tone_gender 4_m
	run exposure_sequence_2

define sequence exposure_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exposure always
	run exposure_fixation always

define sequence exposure_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exposure_2 always
	run exposure_fixation_2 always

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In the beeps detecting task, you sucessfully detected [total_count]% of all beeps.<br /><br />In the word familiarity test, your accuracy was [acc]%.<br /><br />Press ANYKEY to continue" x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instruction - the first half part<br /><br /><br />In the present experiment, you are going to learn a new language! <br /><br />In the first half of the experiment, you will listen to some streams of sample words from this new language. Among these sample words, some beeps are randomly presented. Your task in this part is  to count how many beeps occurred. <br /><br />There will be 5 speech streams with each lasts for 2 minutes.After each 2-minute, you will be ask to fill in the numbers you count.  <br /><br />Now, let's start a short practice!<br /><br /><br />Press ANYKEY to start practice<br />" x=0 y=0 z_index=0

define loop loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[c1][gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_1
	set volume 1
	set stop_after 0
	set sample "[c2][gender].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad start_test
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instruction - the second half part<br /><br /><br />The second half is a test on the extent to which you get familiar with the new language. During each test trail you will hear a pair of single words in a row. One of the words had been presented more frequently than another in the speech streams you just heard. You will need to judge which one of them sounds more familiar to you. Please press the number key “1” or “2” to indicate your choice.<br /><br />Note that although the words are read either by a man or a woman, your judgements should be independent of the gender of voice.<br /><br />After hearing each pair of words, you have a maximum of 5 seconds to respond.<br /><br />Now let's try 3 trials for practice!<br /><br /><br />Press ANYKEY to start practice<br />" x=0 y=0 z_index=0

define sketchpad test_choice1
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 1" x=0 y=-96 z_index=0
	draw image center=1 file="speaker.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_choice2
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 2" x=0 y=-96 z_index=0
	draw image center=1 file="speaker.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_fixation
	set start_response_interval no
	set duration 295
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define loop test_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 3
	set continuous yes
	set column_order ""
	set break_if_on_first no
	set break_if never
	setcycle 0 c1 pei4
	setcycle 0 c2 ge4
	setcycle 0 gender _f
	setcycle 0 answer 1
	setcycle 1 c1 tai2
	setcycle 1 c2 pei4
	setcycle 1 gender _m
	setcycle 1 answer 2
	setcycle 2 c1 pei1
	setcycle 2 c2 pei4
	setcycle 2 gender _f
	setcycle 2 answer 2
	run test_sequence

define keyboard_response test_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[answer]"
	set allowed_responses "1;2;NUM_1;NUM_2"

define sketchpad test_response_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Which sounds more familiar to you?" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 1 ?" x=-160 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Choice 2 ?" x=160 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press the number key “1” or “2” to indicate your choice" x=0 y=160 z_index=0

define sequence test_sequence
	set flush_keyboard yes
	set description "A single trial"
	run test_fixation always
	run new_sampler always
	run test_choice1 always
	run test_fixation always
	run new_sampler_1 always
	run test_choice2 always
	run test_response_sketchpad always
	run test_response always

